CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "channel1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "channel3")
    Name to assign these images:HLA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "channel2")
    Name to assign these images:Iba1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:HLA
    Name the primary objects to be identified:idHLA
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Iba1
    Name the primary objects to be identified:idIba1
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:7|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enabled:False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
    Select the input image:DAPI
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DAPI
    Name the primary objects to be identified:IdDAPI
    Typical diameter of objects, in pixel units (Min,Max):2,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectIntensity:[module_num:9|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
    Select images to measure:HLA
    Select objects to measure:idHLA

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:Iba1
    Select objects to measure:idIba1

RelateObjects:[module_num:11|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
    Parent objects:IdDAPI
    Child objects:idHLA
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:12|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
    Parent objects:IdDAPI
    Child objects:idIba1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ClassifyObjects:[module_num:13|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
    Make classification decision based on:Single measurement
    Hidden:2
    Hidden:1
    Select the object to be classified:IdDAPI
    Select the measurement to classify by:Children_idHLA_Count
    Select bin spacing:Evenly spaced bins
    Number of bins:2
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object to be classified:IdDAPI
    Select the measurement to classify by:Children_idIba1_Count
    Select bin spacing:Evenly spaced bins
    Number of bins:2
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|
    Rules or classifier file name:mymodel.model
    Allow fuzzy feature matching?:No

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\2026\\imagingpro\\snpc_ana\\WT
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdDAPI|Location_Center_Z,IdDAPI|Location_Center_Y,IdDAPI|Location_Center_X,IdDAPI|Children_idIba1_Count,IdDAPI|Children_idHLA_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:WT
    Overwrite existing files without warning?:No
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